PsychoPy2experiment version="2021.1.0"
Settings
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = sample05
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Routines
  Routine trial
    ptc_rec_component ptc_rec
      start_msg = Start recording
      stop_msg = Stop recording
    ptc_getpos_component ptc_getpos
      binocular = Average
      filler = -10000
    PolygonComponent polygon
      fillColor = $[1,1,1]
      nVertices = 64
      pos [set every frame] = ptc_getpos
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ptc_message_component ptc_message
      text = look at right
      time = ptc_getpos[0]>0.3
      timeType = condition
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine init
    ptc_init_component ptc_init
      datafile = data.tsv
      embed = False
      id = 0
    ptc_cal_component ptc_cal
      calibration_points = [[-0.2, -0.2], [0.2, -0.2], [0, 0], [-0.2, 0.2], [0.2, 0.2]]
      decision_key = return
      enable_mouse = True
      move_duration = 1.0
      show_status = True
      shuffle = False
      start_key = space
      text_color = white
Flow
  Routine init
  Routine trial
